---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates no
set transparent_variables no
set title ANT
set synth_backend legacy
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 24
set font_italic no
set font_family Arial
set font_bold no
set experiment_path "C:/Users/nar09/Desktop"
set disable_garbage_collection yes
set description "Default description"
set coordinates relative
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define sketchpad SOA
	set duration 400
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0

define keyboard_response Start
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"

define inline_script adjust_to_monitor
	set description "Executes Python code"
	___run__
	#what needs to be done is mostly the adjustment of the arrow images, this can be done quite easily in Paint for example;
	#in the present example, the five elements (arrow + flankers) have a width of 21px, 
	#which corresponds to a visual angle of 0.55° and a seating distance of 60cm to the screen
	
	#set distance from cues and targets from screen center
	
	#compute size stimuli etc. so that this experiment can be run on any monitor
	screen_cm = 53.2 ##insert your parameter here
	screen_px = 1920 ##insert your parameter here
	screen_distance = 60 ##insert  your value here
	
	import math
	
	# define tangez function so that seating distance can be related to stimuli size
	def tan(x):
	    import math
	    tangenz = math.tan((math.pi/180)*x)
	    return tangenz
	
	# run conversions
	distance_cm = 2*screen_distance*tan(1.06/2)
	distance_px = (screen_px/screen_cm)*distance_cm
	
	# set in data file
	exp.set('distance', distance_px)
	__end__
	set _prepare ""

define sketchpad bottom_target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw image center=1 file="left_congruent.png" scale=1 show_if="[arrow_condition]=congruentLeft" x=0 y="[distance]" z_index=0
	draw image center=1 file="right_congruent.png" scale=1 show_if="[arrow_condition]=congruentRight" x=0 y="[distance]" z_index=0
	draw image center=1 file="left_neutral.png" scale=1 show_if="[arrow_condition]=neutralLeft" x=0 y="[distance]" z_index=0
	draw image center=1 file="right_neutral.png" scale=1 show_if="[arrow_condition]=neutralRight" x=0 y="[distance]" z_index=0
	draw image center=1 file="left_incongruent.png" scale=1 show_if="[arrow_condition]=incongruentLeft" x=0 y="[distance]" z_index=0
	draw image center=1 file="right_incongruent.png" scale=1 show_if="[arrow_condition]=incongruentRight" x=0 y="[distance]" z_index=0

define sketchpad cue
	set duration 100
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw image center=1 file="asterisk.png" scale=1 show_if="[cue_condition]=spatialTop" x=0 y="-[distance]" z_index=0
	draw image center=1 file="asterisk.png" scale=1 show_if="[cue_condition]=spatialBot" x=0 y="[distance]" z_index=0
	draw image center=1 file="asterisk.png" scale=1 show_if="[cue_condition]=double" x=0 y="-[distance]" z_index=0
	draw image center=1 file="asterisk.png" scale=1 show_if="[cue_condition]=double" x=0 y="[distance]" z_index=0
	draw image center=1 file="asterisk.png" scale=1 show_if="[cue_condition]=center" x=0 y=0 z_index=0

define advanced_delay delay_600ms
	set jitter_mode "Std. Dev."
	set jitter 0
	set duration 600
	set description "Waits for a specified duration"

define sketchpad end_fixation
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run adjust_to_monitor always
	run instructions always
	run practice_table always

define sketchpad instructions
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text=INSTRUCTIONS x=0 y=-224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue." x=0 y=224 z_index=0
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="Use the left mouse button if the center arrow is pointing left.<br /><br />Use the right mouse button if the center arrow is pointing right." x=0 y=0 z_index=0

define logger logger
	set use_quotes yes
	set ignore_missing yes
	set description "Logs experimental data"
	set auto_log yes
	log response
	log response_time_mouse_response
	log correct
	log subject_nr
	log congruency
	log cue
	log position
	log correct_key
	log Block

define mouse_response mouse_response
	set timeout 1700
	set show_cursor no
	set linked_sketchpad ""
	set flush yes
	set event_type mouseclick
	set duration mouseclick
	set description "Collects mouse responses"
	set correct_response "[correct_key]"
	set allowed_responses "left_button;right_button"

define loop practice_table
	set source_file ""
	set source table
	set repeat 1
	set order random
	set item Practice_trials
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set column_order "position;arrow_condition;correct_key;cue_condition"
	set break_if_on_first yes
	set break_if never
	setcycle 0 arrow_condition congruentLeft
	setcycle 0 correct_key 1
	setcycle 0 cue_condition no
	setcycle 0 position top
	setcycle 1 arrow_condition neutralRight
	setcycle 1 correct_key 3
	setcycle 1 cue_condition no
	setcycle 1 position top
	setcycle 2 arrow_condition incongruentLeft
	setcycle 2 correct_key 1
	setcycle 2 cue_condition no
	setcycle 2 position top
	setcycle 3 arrow_condition congruentRight
	setcycle 3 correct_key 3
	setcycle 3 cue_condition no
	setcycle 3 position bot
	setcycle 4 arrow_condition neutralLeft
	setcycle 4 correct_key 1
	setcycle 4 cue_condition no
	setcycle 4 position bot
	setcycle 5 arrow_condition incongruentRight
	setcycle 5 correct_key 3
	setcycle 5 cue_condition no
	setcycle 5 position bot
	setcycle 6 arrow_condition congruentLeft
	setcycle 6 correct_key 1
	setcycle 6 cue_condition spatialTop
	setcycle 6 position top
	setcycle 7 arrow_condition neutralRight
	setcycle 7 correct_key 3
	setcycle 7 cue_condition spatialTop
	setcycle 7 position top
	setcycle 8 arrow_condition incongruentLeft
	setcycle 8 correct_key 1
	setcycle 8 cue_condition spatialTop
	setcycle 8 position top
	setcycle 9 arrow_condition congruentRight
	setcycle 9 correct_key 3
	setcycle 9 cue_condition spatialBot
	setcycle 9 position bot
	setcycle 10 arrow_condition neutralLeft
	setcycle 10 correct_key 1
	setcycle 10 cue_condition spatialBot
	setcycle 10 position bot
	setcycle 11 arrow_condition incongruentRight
	setcycle 11 correct_key 3
	setcycle 11 cue_condition spatialBot
	setcycle 11 position bot
	setcycle 12 arrow_condition congruentLeft
	setcycle 12 correct_key 1
	setcycle 12 cue_condition center
	setcycle 12 position top
	setcycle 13 arrow_condition neutralRight
	setcycle 13 correct_key 3
	setcycle 13 cue_condition center
	setcycle 13 position top
	setcycle 14 arrow_condition incongruentLeft
	setcycle 14 correct_key 1
	setcycle 14 cue_condition center
	setcycle 14 position top
	setcycle 15 arrow_condition congruentRight
	setcycle 15 correct_key 3
	setcycle 15 cue_condition center
	setcycle 15 position bot
	setcycle 16 arrow_condition neutralLeft
	setcycle 16 correct_key 1
	setcycle 16 cue_condition center
	setcycle 16 position bot
	setcycle 17 arrow_condition incongruentRight
	setcycle 17 correct_key 3
	setcycle 17 cue_condition center
	setcycle 17 position bot
	setcycle 18 arrow_condition congruentLeft
	setcycle 18 correct_key 1
	setcycle 18 cue_condition double
	setcycle 18 position top
	setcycle 19 arrow_condition neutralRight
	setcycle 19 correct_key 3
	setcycle 19 cue_condition double
	setcycle 19 position top
	setcycle 20 arrow_condition incongruentLeft
	setcycle 20 correct_key 1
	setcycle 20 cue_condition double
	setcycle 20 position top
	setcycle 21 arrow_condition congruentRight
	setcycle 21 correct_key 3
	setcycle 21 cue_condition double
	setcycle 21 position bot
	setcycle 22 arrow_condition neutralLeft
	setcycle 22 correct_key 1
	setcycle 22 cue_condition double
	setcycle 22 position bot
	setcycle 23 arrow_condition incongruentRight
	setcycle 23 correct_key 3
	setcycle 23 cue_condition double
	setcycle 23 position bot
	run trial_flow

define inline_script randomize_fixation_duration
	set description "Executes Python code"
	set _run ""
	___prepare__
	import random
	random.seed()
	
	fixation = random.randint(400,1600)
	
	# save to data file
	exp.set('fixation', fixation)
	__end__

define sketchpad start_fixation
	set duration "[fixation]"
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0

define sketchpad top_target
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=Arial font_italic=no font_size=24 html=yes show_if=always text="+" x=0 y=0 z_index=0
	draw image center=1 file="left_congruent.png" scale=1 show_if="[arrow_condition]=congruentLeft" x=0 y="-[distance]" z_index=0
	draw image center=1 file="right_congruent.png" scale=1 show_if="[arrow_condition]=congruentRight" x=0 y="-[distance]" z_index=0
	draw image center=1 file="left_neutral.png" scale=1 show_if="[arrow_condition]=neutralLeft" x=0 y="-[distance]" z_index=0
	draw image center=1 file="right_neutral.png" scale=1 show_if="[arrow_condition]=neutralRight" x=0 y="-[distance]" z_index=0
	draw image center=1 file="left_incongruent.png" scale=1 show_if="[arrow_condition]=incongruentLeft" x=0 y="-[distance]" z_index=0
	draw image center=1 file="right_incongruent.png" scale=1 show_if="[arrow_condition]=incongruentRight" x=0 y="-[distance]" z_index=0

define sequence trial_flow
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomize_fixation_duration always
	run start_fixation always
	run cue always
	run SOA always
	run top_target "[position]=top"
	run mouse_response "[position]=top"
	run bottom_target "[position]=bot"
	run mouse_response "[position]=bot"
	run end_fixation always
	run variables_for_logger_endduration always
	run delay_600ms always
	run logger always

define inline_script variables_for_logger_endduration
	set description "sets some variables for the logger and sets the endduration"
	___run__
	endfixation = 3500-self.get('response_time_mouse_response')-self.get('fixation')
	self.sleep(endfixation)
	exp.set('endfixation', endfixation)
	__end__
	___prepare__
	arrow = self.get('arrow_condition')
	if arrow == 'congruentLeft':
		congruency = 'congruent'
	elif arrow == 'congruentRight':
		congruency = 'congruent'
	elif arrow == 'neutralLeft':
		congruency = 'neutral'
	elif arrow == 'neutralRight':
		congruency = 'neutral'
	elif arrow == 'incongruentLeft':
		congruency = 'incongruent'
	elif arrow == 'incongruentRight':
		congruency = 'incongruent'
		
	exp.set('congruency', congruency)
	
	cue = self.get('cue_condition')
	if cue == 'spatialTop':
		cue_cat = 'spatial'
	elif cue == 'spatialBot':
		cue_cat = 'spatial'
	else:
		cue_cat = "other"
	
	exp.set('cue_cat', cue_cat)
	__end__

