---
API: 2.1
OpenSesame: 3.2.5
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "mobile UFOV"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/nar09/Documents/GitHub/paradigms/mobile_ufov_demo"
set disable_garbage_collection yes
set description "Created by Nelson Roque, PhD. nelsonroque.com"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background grey

define inline_script PARAMETERS
	set description "Executes Python code"
	set _run ""
	___prepare__
	# visual parameters
	# ////////////////////////////////////////
	var.UFOV_img_path = exp.pool[u'ufov.png']
	var.UFOV_img_scale = 0.6
	var.UFOV_img_start_pos = [0,30,60,90,120,150,180,210,240,270,300,330]
	
	# layout parameters
	# ////////////////////////////////////////
	var.central_stim_spacing_px = 300
	var.peripheral_item_coords = [200, 250, -200, -250]
	
	# timing parameters
	# ////////////////////////////////////////
	var.fixation_time_ms = 300
	var.stim_time_ms = 250
	var.mask_time_ms = 300
	var.response_central_timeout_ms = 5000
	var.UFOV_stim_presentation_jitter = [-100, -50, 0, 50, 150, 200, 250, 300, 450]
	var.UFOV_peripheral_jitter = [0, 25, 50]
	__end__

define sketchpad divided_attention
	set duration "[divided_jitter_time_ms]"
	set description "Displays stimuli"
	draw image center=1 file="ufov.png" rotation="[target_start_rotation]" scale="[UFOV_img_scale]" show_if=always x=0 y=0 z_index=0
	draw textline center=1 color=white font_bold=no font_family=mono font_italic=no font_size=64 html=yes show_if=always text="+" x="[cur_peripheral_stim_coords_jx]" y="[cur_peripheral_stim_coords_jy]" z_index=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run PARAMETERS always
	run mUFOVIntro always
	run trial_table always

define sketchpad fixation
	set duration "[fixation_jitter_time_ms]"
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad mUFOVIntro
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text=mUFOV x=0 y=-256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Press any key to continue." x=0 y=256 z_index=0
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=24 html=yes show_if=always text="Instructions here." x=0 y=-128 z_index=0

define sketchpad mask
	set duration "[mask_jitter_time_ms]"
	set description "Displays stimuli"
	draw image center=1 file="mask.png" scale=0.8 show_if=always x=0 y=0 z_index=0

define sketchpad new_sketchpad
	set duration 500
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define inline_script randomize_starting_vals
	set description "Executes Python code"
	set _run ""
	___prepare__
	# import library for random num gen
	# ////////////////////////////////////////
	import random
	
	# randomize start rotation and jitter value for trial
	# ////////////////////////////////////////
	var.target_start_rotation = random.choice(var.UFOV_img_start_pos)
	var.jitter_ms = random.choice(var.UFOV_stim_presentation_jitter)
	
	# randomize peripheral item location
	var.cur_peripheral_stim_x = random.choice(var.peripheral_item_coords)
	var.cur_peripheral_stim_y = random.choice(var.peripheral_item_coords)
	var.peripheral_jitter_px = random.choice(var.UFOV_peripheral_jitter)
	var.cur_peripheral_stim_coords_jx = (var.cur_peripheral_stim_x + var.peripheral_jitter_px)
	var.cur_peripheral_stim_coords_jy = (var.cur_peripheral_stim_y + var.peripheral_jitter_px)
	
	# ////////////////////////////////////////
	var.fixation_jitter_time_ms = var.fixation_time_ms + var.jitter_ms
	var.divided_jitter_time_ms = var.stim_time_ms + var.jitter_ms
	var.mask_jitter_time_ms = var.mask_time_ms + var.jitter_ms
	__end__

define inline_script response_central
	set description "Executes Python code"
	___run__
	# listen for response
	# ////////////////////////////////////////
	while True:
		button, position, timestamp = my_mouse.get_click(timeout=20)
		if button is not None:
			break
		(x,y), time = my_mouse.get_pos()
	
		# draw stimuli	
		# ////////////////////////////////////////
		#my_canvas.clear()
		my_canvas.show()
	
	# save variables
	# ////////////////////////////////////////
	var.central_x = x
	var.central_y = y
	var.central_RT = time
	__end__
	___prepare__
	# initialize mouse
	# ////////////////////////////////////////
	my_mouse = Mouse(buttonlist=[1,3], timeout=5000, visible=True)
	my_mouse.set_pos(pos=(0,0))
	my_canvas = Canvas()
	
	# create response prompt
	# ////////////////////////////////////////
	my_canvas.text("Which item did you see?", x=0, y=0)
	
	# draw stim items based on trial table side
	# ////////////////////////////////////////
	if(var.stim_response_side == "left"):
		my_canvas.image(var.UFOV_img_path, rotation=var.target_start_rotation, x=-var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # left
		my_canvas.image(var.UFOV_img_path, rotation=(var.target_start_rotation+var.lure_rotation), x=var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # right
	elif(var.stim_response_side == "right"):
		my_canvas.image(var.UFOV_img_path, rotation=(var.target_start_rotation+var.lure_rotation), x=-var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # left
		my_canvas.image(var.UFOV_img_path, rotation=var.target_start_rotation, x=var.central_stim_spacing_px, y=0, scale=var.UFOV_img_scale) # right
	__end__

define inline_script response_peripheral
	set description "Executes Python code"
	___run__
	# listen for response
	# ////////////////////////////////////////
	while True:
		button, position, timestamp = my_mouse.get_click(timeout=20)
		if button is not None:
			break
		(x,y), time = my_mouse.get_pos()
	
		# draw stimuli	
		# ////////////////////////////////////////
		#my_canvas.clear()
		my_canvas.show()
	
	# save variables
	# ////////////////////////////////////////
	var.peripheral_x = x
	var.peripheral_y = y
	var.peripheral_RT = time
	__end__
	___prepare__
	# initialize mouse
	# ////////////////////////////////////////
	my_canvas.clear()
	my_mouse = Mouse(buttonlist=[1,3], timeout=5000, visible=True)
	my_mouse.set_pos(pos=(0,0))
	my_canvas = Canvas()
	
	# create response prompt
	# ////////////////////////////////////////
	my_canvas.text("Click location of<br>peripheral item", x=0, y=0)
	__end__

define logger save_data
	set description "Logs experimental data"
	set auto_log yes

define sequence trial_flow
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run randomize_starting_vals always
	run fixation always
	run divided_attention always
	run mask always
	run response_central always
	run response_peripheral always
	run new_sketchpad always
	run save_data always

define loop trial_table
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 24
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 lure_rotation -5
	setcycle 0 stim_presentation_time 150
	setcycle 0 stim_response_side left
	setcycle 1 lure_rotation -15
	setcycle 1 stim_presentation_time 150
	setcycle 1 stim_response_side left
	setcycle 2 lure_rotation -25
	setcycle 2 stim_presentation_time 150
	setcycle 2 stim_response_side left
	setcycle 3 lure_rotation -35
	setcycle 3 stim_presentation_time 150
	setcycle 3 stim_response_side left
	setcycle 4 lure_rotation -45
	setcycle 4 stim_presentation_time 200
	setcycle 4 stim_response_side left
	setcycle 5 lure_rotation -60
	setcycle 5 stim_presentation_time 150
	setcycle 5 stim_response_side left
	setcycle 6 lure_rotation -5
	setcycle 6 stim_presentation_time 150
	setcycle 6 stim_response_side right
	setcycle 7 lure_rotation -15
	setcycle 7 stim_presentation_time 150
	setcycle 7 stim_response_side right
	setcycle 8 lure_rotation -25
	setcycle 8 stim_presentation_time 150
	setcycle 8 stim_response_side right
	setcycle 9 lure_rotation -35
	setcycle 9 stim_presentation_time 150
	setcycle 9 stim_response_side right
	setcycle 10 lure_rotation -45
	setcycle 10 stim_presentation_time 150
	setcycle 10 stim_response_side right
	setcycle 11 lure_rotation -60
	setcycle 11 stim_presentation_time 150
	setcycle 11 stim_response_side right
	setcycle 12 lure_rotation 5
	setcycle 12 stim_presentation_time 150
	setcycle 12 stim_response_side left
	setcycle 13 lure_rotation 15
	setcycle 13 stim_presentation_time 150
	setcycle 13 stim_response_side left
	setcycle 14 lure_rotation 25
	setcycle 14 stim_presentation_time 150
	setcycle 14 stim_response_side left
	setcycle 15 lure_rotation 35
	setcycle 15 stim_presentation_time 150
	setcycle 15 stim_response_side left
	setcycle 16 lure_rotation 45
	setcycle 16 stim_presentation_time 150
	setcycle 16 stim_response_side left
	setcycle 17 lure_rotation 60
	setcycle 17 stim_presentation_time 150
	setcycle 17 stim_response_side left
	setcycle 18 lure_rotation 5
	setcycle 18 stim_presentation_time 150
	setcycle 18 stim_response_side right
	setcycle 19 lure_rotation 15
	setcycle 19 stim_presentation_time 150
	setcycle 19 stim_response_side right
	setcycle 20 lure_rotation 25
	setcycle 20 stim_presentation_time 150
	setcycle 20 stim_response_side right
	setcycle 21 lure_rotation 35
	setcycle 21 stim_presentation_time 150
	setcycle 21 stim_response_side right
	setcycle 22 lure_rotation 45
	setcycle 22 stim_presentation_time 150
	setcycle 22 stim_response_side right
	setcycle 23 lure_rotation 60
	setcycle 23 stim_presentation_time 150
	setcycle 23 stim_response_side right
	run trial_flow

