---
API: 2.1
OpenSesame: 3.2.7
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "Go No-go Task"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend legacy
set keyboard_backend legacy
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\nur375\\Documents\\GitHub\\paradigms\\pc\\go_nogo\\OS"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend legacy
set clock_backend legacy
set canvas_backend legacy
set bidi no
set background white

define sketchpad Blank_Control
	set duration 1000
	set description "Displays stimuli"

define sketchpad Blank_Control_1
	set duration 1000
	set description "Displays stimuli"

define sketchpad Blank_Experimental
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[condition] = control" text="" x=-448 y=-224 z_index=0

define sketchpad Blank_Experimental_2
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if="[condition] = control" text="" x=-448 y=-224 z_index=0

define sequence Block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Control_Condition "[condition] = control"
	run Instructions_Experimental_Condition "[condition] = experimental"
	run Trial_Loop_Experimental_Condition_Practice_Phase "[condition] = experimental"
	run Trial_Loop_Control_Condition_Practice_Phase "[condition] = control"

define sequence Block_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Control_Condition_1 "[condition] = control"
	run Instructions_Experimental_Condition_1 "[condition] = experimental"
	run Trial_Loop_Experimental_Condition_Experimental_Phase "[condition] = experimental"
	run Trial_Loop_Control_Condition_Experimental_Phase_1 "[condition] = control"

define inline_script Counterbalance
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.subject_parity == 'even':
		var.condition1 = 'experimental'
		var.condition2 = 'control'
	else:
		var.condition1 = 'control'
		var.condition2 = 'experimental'
	__end__

define form_text_display End_of_Experiment
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24>The experiment is finished</span>"
	__form_text__
	
	
	Click on ok to exit. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display End_of_Practice
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "<span size=24></span>"
	__form_text__
	The practice phase is over
	
	The actual experiment start after this instructions
	
	In the Go-Condition you have to respond to every letter in the series.
	
	In the Go/NoGo-Condition you have to respond to every letter in the series except the letter 'X'.
	
	Instructions will show you which condition comes next.
	
	To respond to letters in the series you press 'm' on your keyboard.  
	
	You need to respond with the forefinger of your right hand.   
	
	After a while there will be a 10-second break
	
	During the break you will see a blank screen
	
	Click on ok to start the actual experiment. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Experimental_Loop
	set source table
	set repeat 6
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice no
	setcycle 0 condition "[condition1]"
	setcycle 1 practice no
	setcycle 1 condition "[condition2]"
	run Block_sequence_1

define loop Experimental_Loop_with_Pause
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Experimental_Loop_PLUS_Pause ""
	run Experimental_PLUS_Pause_Sequence

define sequence Experimental_PLUS_Pause_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pause_1 always
	run Experimental_Loop always
	run End_of_Experiment always

define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text "I understand"
	set margins "50;50;50;50"
	set form_title "<span size=24>Instructions</span>"
	__form_text__
	Go No-go Task
	
	In this task you will see a series of letters. 
	
	In the Go-Condition you have to respond to every letter in the series.
	
	In the Go/NoGo-Condition you have to respond to every letter in the series except the letter 'X'.
	
	Instructions will show you which condition comes next.
	
	To respond to letters in the series you press 'm' on your keyboard.  
	
	You need to respond with the forefinger of your right hand.   
	
	You will start with a practice phase. 
	__end__
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Instructions_Control_Condition
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="The Go Condition starts<br />" x=0 y=0 z_index=0

define sketchpad Instructions_Control_Condition_1
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="The Go Condition starts<br />" x=0 y=0 z_index=0

define sketchpad Instructions_Experimental_Condition
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="The Go NoGo Condition Starts<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="" x=-544 y=0 z_index=0

define sketchpad Instructions_Experimental_Condition_1
	set duration 1995
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="The Go NoGo Condition Starts<br />" x=0 y=0 z_index=0
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="" x=-544 y=0 z_index=0

define keyboard_response KBR_Control
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response_Control]"
	set allowed_responses m

define keyboard_response KBR_Control_1
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response_Control]"
	set allowed_responses m

define keyboard_response KBR_Experimental
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response_Experimental]"
	set allowed_responses m

define keyboard_response KBR_Experimental_2
	set timeout 2000
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[correct_response_Experimental]"
	set allowed_responses m

define sketchpad Letter_Control_Condition
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[Letter_Control_Condition]" x=0 y=0 z_index=0

define sketchpad Letter_Control_Condition_1
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[Letter_Control_Condition]" x=0 y=0 z_index=0

define sketchpad Letter_Experimental_Condition_2
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[Letter_Experimental_Condition]" x=0 y=0 z_index=0

define sketchpad Letter_Experimental_Condition_2_2
	set duration 1000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="[Letter_Experimental_Condition]" x=0 y=0 z_index=0

define sketchpad Pause_1
	set duration 10000
	set description "Displays stimuli"

define loop PracticeLoop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 2
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 practice yes
	setcycle 0 condition "[condition1]"
	setcycle 1 practice yes
	setcycle 1 condition "[condition2]"
	run Block_sequence

define loop Trial_Loop_Control_Condition_Experimental_Phase_1
	set source_file ""
	set source table
	set repeat 0.65
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Letter_Control_Condition Q
	setcycle 0 correct_response_Control m
	setcycle 1 Letter_Control_Condition W
	setcycle 1 correct_response_Control m
	setcycle 2 Letter_Control_Condition R
	setcycle 2 correct_response_Control m
	setcycle 3 Letter_Control_Condition T
	setcycle 3 correct_response_Control m
	setcycle 4 Letter_Control_Condition Y
	setcycle 4 correct_response_Control m
	setcycle 5 Letter_Control_Condition U
	setcycle 5 correct_response_Control m
	setcycle 6 Letter_Control_Condition I
	setcycle 6 correct_response_Control m
	setcycle 7 Letter_Control_Condition O
	setcycle 7 correct_response_Control m
	setcycle 8 Letter_Control_Condition P
	setcycle 8 correct_response_Control m
	setcycle 9 Letter_Control_Condition A
	setcycle 9 correct_response_Control m
	setcycle 10 Letter_Control_Condition S
	setcycle 10 correct_response_Control m
	setcycle 11 Letter_Control_Condition D
	setcycle 11 correct_response_Control m
	setcycle 12 Letter_Control_Condition F
	setcycle 12 correct_response_Control m
	setcycle 13 Letter_Control_Condition G
	setcycle 13 correct_response_Control m
	setcycle 14 Letter_Control_Condition H
	setcycle 14 correct_response_Control m
	setcycle 15 Letter_Control_Condition J
	setcycle 15 correct_response_Control m
	setcycle 16 Letter_Control_Condition K
	setcycle 16 correct_response_Control m
	setcycle 17 Letter_Control_Condition L
	setcycle 17 correct_response_Control m
	setcycle 18 Letter_Control_Condition Z
	setcycle 18 correct_response_Control m
	setcycle 19 Letter_Control_Condition C
	setcycle 19 correct_response_Control m
	run Trial_sequence_Control_1

define loop Trial_Loop_Control_Condition_Practice_Phase
	set source_file ""
	set source table
	set repeat 0.25
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 Letter_Control_Condition Q
	setcycle 0 correct_response_Control m
	setcycle 1 Letter_Control_Condition W
	setcycle 1 correct_response_Control m
	setcycle 2 Letter_Control_Condition R
	setcycle 2 correct_response_Control m
	setcycle 3 Letter_Control_Condition T
	setcycle 3 correct_response_Control m
	setcycle 4 Letter_Control_Condition Y
	setcycle 4 correct_response_Control m
	setcycle 5 Letter_Control_Condition U
	setcycle 5 correct_response_Control m
	setcycle 6 Letter_Control_Condition I
	setcycle 6 correct_response_Control m
	setcycle 7 Letter_Control_Condition O
	setcycle 7 correct_response_Control m
	setcycle 8 Letter_Control_Condition P
	setcycle 8 correct_response_Control m
	setcycle 9 Letter_Control_Condition A
	setcycle 9 correct_response_Control m
	setcycle 10 Letter_Control_Condition S
	setcycle 10 correct_response_Control m
	setcycle 11 Letter_Control_Condition D
	setcycle 11 correct_response_Control m
	setcycle 12 Letter_Control_Condition F
	setcycle 12 correct_response_Control m
	setcycle 13 Letter_Control_Condition G
	setcycle 13 correct_response_Control m
	setcycle 14 Letter_Control_Condition H
	setcycle 14 correct_response_Control m
	setcycle 15 Letter_Control_Condition J
	setcycle 15 correct_response_Control m
	setcycle 16 Letter_Control_Condition K
	setcycle 16 correct_response_Control m
	setcycle 17 Letter_Control_Condition L
	setcycle 17 correct_response_Control m
	setcycle 18 Letter_Control_Condition Z
	setcycle 18 correct_response_Control m
	setcycle 19 Letter_Control_Condition C
	setcycle 19 correct_response_Control m
	run Trial_sequence_Control

define loop Trial_Loop_Experimental_Condition_Experimental_Phase
	set source table
	set repeat 0.65
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 Letter_Experimental_Condition W
	setcycle 0 correct_response_Experimental m
	setcycle 1 Letter_Experimental_Condition R
	setcycle 1 correct_response_Experimental m
	setcycle 2 Letter_Experimental_Condition Y
	setcycle 2 correct_response_Experimental m
	setcycle 3 Letter_Experimental_Condition I
	setcycle 3 correct_response_Experimental m
	setcycle 4 Letter_Experimental_Condition O
	setcycle 4 correct_response_Experimental m
	setcycle 5 Letter_Experimental_Condition A
	setcycle 5 correct_response_Experimental m
	setcycle 6 Letter_Experimental_Condition D
	setcycle 6 correct_response_Experimental m
	setcycle 7 Letter_Experimental_Condition G
	setcycle 7 correct_response_Experimental m
	setcycle 8 Letter_Experimental_Condition J
	setcycle 8 correct_response_Experimental m
	setcycle 9 Letter_Experimental_Condition K
	setcycle 9 correct_response_Experimental m
	setcycle 10 Letter_Experimental_Condition X
	setcycle 10 correct_response_Experimental None
	setcycle 11 Letter_Experimental_Condition X
	setcycle 11 correct_response_Experimental None
	setcycle 12 Letter_Experimental_Condition X
	setcycle 12 correct_response_Experimental None
	setcycle 13 Letter_Experimental_Condition X
	setcycle 13 correct_response_Experimental None
	setcycle 14 Letter_Experimental_Condition X
	setcycle 14 correct_response_Experimental None
	setcycle 15 Letter_Experimental_Condition X
	setcycle 15 correct_response_Experimental None
	setcycle 16 Letter_Experimental_Condition X
	setcycle 16 correct_response_Experimental None
	setcycle 17 Letter_Experimental_Condition X
	setcycle 17 correct_response_Experimental None
	setcycle 18 Letter_Experimental_Condition X
	setcycle 18 correct_response_Experimental None
	setcycle 19 Letter_Experimental_Condition X
	setcycle 19 correct_response_Experimental None
	run Trial_sequence_Experimental_2

define loop Trial_Loop_Experimental_Condition_Practice_Phase
	set source_file ""
	set source table
	set repeat 0.25
	set order random
	set description "Repeatedly runs another item"
	set cycles 20
	set continuous no
	set break_if_on_first no
	set break_if never
	setcycle 0 Letter_Experimental_Condition W
	setcycle 0 correct_response_Experimental m
	setcycle 1 Letter_Experimental_Condition R
	setcycle 1 correct_response_Experimental m
	setcycle 2 Letter_Experimental_Condition Y
	setcycle 2 correct_response_Experimental m
	setcycle 3 Letter_Experimental_Condition I
	setcycle 3 correct_response_Experimental m
	setcycle 4 Letter_Experimental_Condition O
	setcycle 4 correct_response_Experimental m
	setcycle 5 Letter_Experimental_Condition A
	setcycle 5 correct_response_Experimental m
	setcycle 6 Letter_Experimental_Condition D
	setcycle 6 correct_response_Experimental m
	setcycle 7 Letter_Experimental_Condition G
	setcycle 7 correct_response_Experimental m
	setcycle 8 Letter_Experimental_Condition J
	setcycle 8 correct_response_Experimental m
	setcycle 9 Letter_Experimental_Condition K
	setcycle 9 correct_response_Experimental m
	setcycle 10 Letter_Experimental_Condition X
	setcycle 10 correct_response_Experimental None
	setcycle 11 Letter_Experimental_Condition X
	setcycle 11 correct_response_Experimental None
	setcycle 12 Letter_Experimental_Condition X
	setcycle 12 correct_response_Experimental None
	setcycle 13 Letter_Experimental_Condition X
	setcycle 13 correct_response_Experimental None
	setcycle 14 Letter_Experimental_Condition X
	setcycle 14 correct_response_Experimental None
	setcycle 15 Letter_Experimental_Condition X
	setcycle 15 correct_response_Experimental None
	setcycle 16 Letter_Experimental_Condition X
	setcycle 16 correct_response_Experimental None
	setcycle 17 Letter_Experimental_Condition X
	setcycle 17 correct_response_Experimental None
	setcycle 18 Letter_Experimental_Condition X
	setcycle 18 correct_response_Experimental None
	setcycle 19 Letter_Experimental_Condition X
	setcycle 19 correct_response_Experimental None
	run Trial_sequence_Experimental

define sequence Trial_sequence_Control
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run coroutines_Control always
	run logger_1 always

define sequence Trial_sequence_Control_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run coroutines_Control_1 always
	run logger_1 always

define sequence Trial_sequence_Experimental
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run coroutines_Experimental always
	run logger_1 always

define sequence Trial_sequence_Experimental_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run coroutines_Experimental_2 always
	run logger_1 always

define coroutines coroutines_Control
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 2000
	set description "Run items simultaneously"
	run Letter_Control_Condition end=0 runif=always start=0
	run Blank_Control end=1000 runif=always start=1000
	run KBR_Control end=2000 runif=always start=0

define coroutines coroutines_Control_1
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 2000
	set description "Run items simultaneously"
	run Letter_Control_Condition_1 end=0 runif=always start=0
	run Blank_Control_1 end=1000 runif=always start=1000
	run KBR_Control_1 end=2000 runif=always start=0

define coroutines coroutines_Experimental
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 2000
	set description "Run items simultaneously"
	run Letter_Experimental_Condition_2 end=0 runif=always start=0
	run Blank_Experimental end=1000 runif=always start=1000
	run KBR_Experimental end=2000 runif=always start=0

define coroutines coroutines_Experimental_2
	set function_name ""
	set flush_keyboard yes
	set end_after_item ""
	set duration 2000
	set description "Run items simultaneously"
	run Letter_Experimental_Condition_2_2 end=0 runif=always start=0
	run Blank_Experimental_2 end=1000 runif=always start=1000
	run KBR_Experimental_2 end=2000 runif=always start=0

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Counterbalance always
	run Instructions always
	run PracticeLoop always
	run End_of_Practice always
	run Experimental_Loop_with_Pause always

define logger logger_1
	set description "Logs experimental data"
	set auto_log yes

